PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['id'], expInfo['session'],expName, expInfo['date'])
  Experiment info = {'id': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1280, 800]
  color = $[-1.0000, -1.0000, 0.0902]
  expName = CRT
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Routines
  Routine Instructions
    TextComponent instr
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Place your middle and index fingers of both hands over the z, x, n, m keys.
        When you see X appear, press the key that matchs the position on screen.
        Be as quick as possible.

        Let's practice...

        Press any key to start
    KeyboardComponent start_key
      allowedKeys = 'z','x','n','m','space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine PracTrial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        index = np.arange(60, 180, 3)
        shuffle(index)
        isi = index[0]
        thisExp.addData('isi.fr',isi)
        isi_ms = (isi/60)
        thisExp.addData('isi.ms', isi_ms)
      End Routine:
        RT = (response.rt*100)
        thisExp.addData('RT', RT)
    PolygonComponent polygon
      fillColor = white
      pos = (-0.375, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = white
      pos = (-0.125, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      fillColor = white
      pos = (0.125, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_4
      fillColor = white
      pos = (0.375, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent target
      image [set every repeat] = stim\target.png
      pos [set every repeat] = $xPos, yPos
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [frame N] = $isi
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    KeyboardComponent response
      allowedKeys = 'z','x','n','m'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine feedback
    CodeComponent code_fb
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ""
      Begin Routine:
        if response.corr:
            msg= 'Correct!'
        else:
            msg='Wrong'
    TextComponent fb
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
      text [set every repeat] = $msg
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  Routine End
    TextComponent text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Task complete
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  Routine Begin
    TextComponent text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now the task...
        No feedback this time, please be as quick as possible

        press any key to start
    KeyboardComponent beginresp
      allowedKeys = 'z','x','n','m','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:8
    conditionsFile = C:\Users\n\University of Surrey\Cohen Kadosh, Kathrin Dr (Psychology) - A Current projects\PrebioticsBoarders\Tasks\Reaction time\ChoiceRT\conds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'xPos': -0.375, 'corrAns': 'z'},
      {'xPos': -0.125, 'corrAns': 'x'},
      {'xPos': 0.125, 'corrAns': 'n'},
      {'xPos': 0.375, 'corrAns': 'm'},
      {'xPos': -0.375, 'corrAns': 'z'},
      {'xPos': -0.125, 'corrAns': 'x'},
      {'xPos': 0.125, 'corrAns': 'n'},
      {'xPos': 0.375, 'corrAns': 'm'},
      {'xPos': -0.375, 'corrAns': 'z'},
      {'xPos': -0.125, 'corrAns': 'x'},
      {'xPos': 0.125, 'corrAns': 'n'},
      {'xPos': 0.375, 'corrAns': 'm'},
      {'xPos': -0.375, 'corrAns': 'z'},
      {'xPos': -0.125, 'corrAns': 'x'},
      {'xPos': 0.125, 'corrAns': 'n'},
      {'xPos': 0.375, 'corrAns': 'm'},
      {'xPos': -0.375, 'corrAns': 'z'},
      {'xPos': -0.125, 'corrAns': 'x'},
      {'xPos': 0.125, 'corrAns': 'n'},
      {'xPos': 0.375, 'corrAns': 'm'},
      {'xPos': -0.375, 'corrAns': 'z'},
      {'xPos': -0.125, 'corrAns': 'x'},
      {'xPos': 0.125, 'corrAns': 'n'},
      {'xPos': 0.375, 'corrAns': 'm'},
      {'xPos': -0.375, 'corrAns': 'z'},
      {'xPos': -0.125, 'corrAns': 'x'},
      {'xPos': 0.125, 'corrAns': 'n'},
      {'xPos': 0.375, 'corrAns': 'm'},
      {'xPos': -0.375, 'corrAns': 'z'},
      {'xPos': -0.125, 'corrAns': 'x'},
      {'xPos': 0.125, 'corrAns': 'n'},
      {'xPos': 0.375, 'corrAns': 'm'},
      {'xPos': -0.375, 'corrAns': 'z'},
      {'xPos': -0.125, 'corrAns': 'x'},
      {'xPos': 0.125, 'corrAns': 'n'},
      {'xPos': 0.375, 'corrAns': 'm'},
      {'xPos': -0.375, 'corrAns': 'z'},
      {'xPos': -0.125, 'corrAns': 'x'},
      {'xPos': 0.125, 'corrAns': 'n'},
      {'xPos': 0.375, 'corrAns': 'm'}]
    Routine PracTrial
    Routine feedback
  LoopTerminator trials
  Routine Begin
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conds.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'xPos': -0.375, 'yPos': 0, 'corrAns': 'z'},
      {'xPos': -0.125, 'yPos': 0, 'corrAns': 'x'},
      {'xPos': 0.125, 'yPos': 0, 'corrAns': 'n'},
      {'xPos': 0.375, 'yPos': 0, 'corrAns': 'm'},
      {'xPos': -0.375, 'yPos': 0, 'corrAns': 'z'},
      {'xPos': -0.125, 'yPos': 0, 'corrAns': 'x'},
      {'xPos': 0.125, 'yPos': 0, 'corrAns': 'n'},
      {'xPos': 0.375, 'yPos': 0, 'corrAns': 'm'},
      {'xPos': -0.375, 'yPos': 0, 'corrAns': 'z'},
      {'xPos': -0.125, 'yPos': 0, 'corrAns': 'x'},
      {'xPos': 0.125, 'yPos': 0, 'corrAns': 'n'},
      {'xPos': 0.375, 'yPos': 0, 'corrAns': 'm'},
      {'xPos': -0.375, 'yPos': 0, 'corrAns': 'z'},
      {'xPos': -0.125, 'yPos': 0, 'corrAns': 'x'},
      {'xPos': 0.125, 'yPos': 0, 'corrAns': 'n'},
      {'xPos': 0.375, 'yPos': 0, 'corrAns': 'm'},
      {'xPos': -0.375, 'yPos': 0, 'corrAns': 'z'},
      {'xPos': -0.125, 'yPos': 0, 'corrAns': 'x'},
      {'xPos': 0.125, 'yPos': 0, 'corrAns': 'n'},
      {'xPos': 0.375, 'yPos': 0, 'corrAns': 'm'},
      {'xPos': -0.375, 'yPos': 0, 'corrAns': 'z'},
      {'xPos': -0.125, 'yPos': 0, 'corrAns': 'x'},
      {'xPos': 0.125, 'yPos': 0, 'corrAns': 'n'},
      {'xPos': 0.375, 'yPos': 0, 'corrAns': 'm'},
      {'xPos': -0.375, 'yPos': 0, 'corrAns': 'z'},
      {'xPos': -0.125, 'yPos': 0, 'corrAns': 'x'},
      {'xPos': 0.125, 'yPos': 0, 'corrAns': 'n'},
      {'xPos': 0.375, 'yPos': 0, 'corrAns': 'm'},
      {'xPos': -0.375, 'yPos': 0, 'corrAns': 'z'},
      {'xPos': -0.125, 'yPos': 0, 'corrAns': 'x'},
      {'xPos': 0.125, 'yPos': 0, 'corrAns': 'n'},
      {'xPos': 0.375, 'yPos': 0, 'corrAns': 'm'},
      {'xPos': -0.375, 'yPos': 0, 'corrAns': 'z'},
      {'xPos': -0.125, 'yPos': 0, 'corrAns': 'x'},
      {'xPos': 0.125, 'yPos': 0, 'corrAns': 'n'}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
    Routine PracTrial
  LoopTerminator trials_2
  Routine End
