PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['id'],expInfo['session'],expName,expInfo['date'])
  Experiment info = {'id': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1280, 800]
  color = $[-1.0000, -1.0000, 0.0902]
  expName = SRT
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Routines
  Routine Trials_2
    PolygonComponent polygon_2
      fillColor = white
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = C:\Users\n\University of Surrey\Cohen Kadosh, Kathrin Dr (Psychology) - A Current projects\PrebioticsBoarders\Tasks\Reaction time\stim\target.png
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0
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    KeyboardComponent Response
      allowedKeys [set every repeat] = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    PolygonComponent ISI_2
      fillColor = white
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [frame N] = $isi
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  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press the space bar when you see X in the box.
        Be as quick as you can

        Press space to practice...
    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Test
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now for the test...

        Press space bar to start
    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Finish
    TextComponent text_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Task complete
  Routine Prac
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        index = np.arange(60, 180, 3)
        shuffle(index)
        isi = index[0]
        thisExp.addData('isi.fr',isi)
        isi_ms = (isi/60)
        thisExp.addData('isi.ms', isi_ms)
      End Routine:
        RT = (key_resp.rt*100)
        thisExp.addData('RT', RT)
    PolygonComponent polygon
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = stim\target.png
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    PolygonComponent ISI
      fillColor = white
      ori [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [frame N] = $isi
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Flow
  Routine Instructions
  LoopInitiator Practice loopType="TrialHandler"
    conditions = [{'cond': 'x', 'corrAns': 'space'}]
    conditionsFile = conds.xlsx
    loopType = random
    nReps = 8
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    Routine Prac
  LoopTerminator Practice
  Routine Test
  LoopInitiator TestTrial loopType="TrialHandler"
    conditions = [{'cond': 'x', 'corrAns': 'space'}]
    conditionsFile = conds.xlsx
    loopType = random
    nReps = 20
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    Routine Prac
  LoopTerminator TestTrial
  Routine Finish
